base_dir = "D:/Data/Tong/MAARS/";
//base_dir = "/home/tong/Documents/code/MAARS/";
//base_dir = "/home/hadim/Documents/phd/dev/MAARS/";
//base_dir = "/Volumes/Macintosh/Documents/MAARS/";

addClassPath(base_dir + "target/MAARS_-1.0.jar");

//dep_base_dir = "/home/tong/.m2/repository/";
//dep_base_dir = "/Users/tongli/.m2/repository/";
//addClassPath(dep_base_dir +"sc/fiji/TrackMate_/2.7.2/TrackMate_-2.7.2.jar");
//addClassPath(dep_base_dir +"net/imglib2/imglib2/2.2.0/imglib2-2.2.0.jar");
//addClassPath(dep_base_dir +"net/imglib2/imglib2-algorithm/0.2.0/imglib2-algorithm-0.2.0.jar");
//addClassPath(dep_base_dir +"net/imagej/imagej-common/0.12.2/imagej-common-0.12.2.jar");
//addClassPath(dep_base_dir +"net/imglib2/imglib2-ij/2.0.0-beta-29/imglib2-ij-2.0.0-beta-29.jar");
//addClassPath(dep_base_dir +"net/imglib2/imglib2-algorithm-fft/0.1.1/imglib2-algorithm-fft-0.1.1.jar");
//addClassPath(dep_base_dir +"net/imglib2/imglib2-algorithm-gpl/0.1.2/imglib2-algorithm-gpl-0.1.2.jar");
//addClassPath(dep_base_dir +"net/sf/opencsv/opencsv/2.0/opencsv-2.0.jar");
//addClassPath(dep_base_dir +"org/scijava/scijava-common/2.38.2/scijava-common-2.38.2.jar");
//addClassPath(dep_base_dir +"net/sf/jgrapht/jgrapht/0.8.3/jgrapht-0.8.3.jar");
//addClassPath(dep_base_dir +"edu/mines/mines-jtk/20100113/mines-jtk-20100113.jar");
//addClassPath(dep_base_dir +"gov/nist/math/jama/1.0.3/jama-1.0.3.jar");

import java.util.List;
import fiji.plugin.maars.maarslib.*;
import fiji.plugin.maars.maarslib.MaarsMainDialog;
import fiji.plugin.maars.maarslib.MaarsParameters;
import fiji.plugin.maars.maarslib.FluoAnalyzer;
import fiji.plugin.maars.maarslib.ExplorationXYPositions;
import fiji.plugin.maars.utils.FileUtils;
import mmcorej.*;
import org.micromanager.api.*;
import ij.*;
import java.io.IOException;
import java.util.HashMap;

mmc.setAutoShutter(false);

//read parameters
MaarsParameters parameters = new MaarsParameters(base_dir + "maars_config.xml");


print("Create main window");
MaarsMainDialog md = new MaarsMainDialog(mm, mmc, parameters);
print("Show main window");
md.show();

while(!md.isOkClicked()) {
	Thread.sleep(1000);
}

if(md.isOkClicked()) {
	start = System.currentTimeMillis();
	print("start "+start);
	
	autofocus = mm.getAutofocus();
	
	mmc.setOriginXY(mmc.getXYStageDevice());
	print("nb x field "+nbXField+" nb y field "+nbYField);

	ExplorationXYPositions explo = new ExplorationXYPositions(mmc, parameters);
	for (int i = 0; i < explo.length(); i++) {
		print("x : "+explo.getX(i)+" y : "+explo.getY(i));
		double xPos = explo.getX(i);
		double yPos = explo.getY(i);
		
		mm.core().setXYPosition(xPos,yPos);
		
		MaarsAcquisitionForSegmentation mas = new MaarsAcquisitionForSegmentation(md,
				xPos,
				yPos);

		mmc.waitForDevice(mmc.getXYStageDevice());

		autofocus.fullFocus();

		HashMap params = mas.getParametersFromConf(param);
		mas.setParameters(params);
		//--------------------------BF acquisition-----------------------------//
		mas.acquire(true);
		//--------------------------segmentation-----------------------------//
		MaarsSegmentation ms = new MaarsSegmentation(param,
			xPos,
			yPos);
		ms.segmentation();
		if(ms.roiDetected()){
		//----------------if got ROI, start fluo-acquisition --------//
			MaarsFluoAnalysis mfa = new MaarsFluoAnalysis(param, ms.getSegPombeParam(), xPos, yPos);
			MaarsAcquisitionForFluoAnalysis mafa = new MaarsAcquisitionForFluoAnalysis(md,
															xPos,
															yPos,
															mfa.getSetOfCells());
//////////////////////////multiple snapshot per field//////////////////////////////
			if(param.useDynamic()) {
				double timeInterval = 
					Double.parseDouble(param.getFluoParameter(MaarsParameters.TIME_INTERVAL));
				double startTime = System.currentTimeMillis();
				int frame = 0;
				double timeLimit = 
					Double.parseDouble(param.getFluoParameter(MaarsParameters.TIME_LIMIT))
					* 60 * 1000;
				while (System.currentTimeMillis() - startTime <= timeLimit)
					{
						double beginAcq = System.currentTimeMillis();

						String channels = param.getUsingChannels();
						String[] arrayChannels = channels.split(",", -1);
						for (String channel:arrayChannels) {
							ImagePlus fluoImage = mafa.acquire(true, frame, channel);
							new FluoAnalyzer(mfa, fluoImage, channel, frame).start();
						}
						mfa.getSetOfCells().closeRoiManager();
						frame++;
						double acqTook = System.currentTimeMillis() - beginAcq;
						Thread.sleep((long) (timeInterval - acqTook));	
						acqNameFluo = null;
						fluoImage = null;	
					}
////////////////////////////one snapshot per field/////////////////////////////////																			
			}else {
				int frame = 0;
				String channels = param.getUsingChannels();
				String[] arrayChannels = channels.split(",", -1);
				for (String channel:arrayChannels) {
					ImagePlus fluoImage = mafa.acquire(true, frame, channel);
					new FluoAnalyzer(mfa, fluoImage, channel, frame).start();
				}
				mfa.getSetOfCells().closeRoiManager();
				acqNameFluo = null;
				fluoImage = null;
			}
///////////////////////////save cropped images//////////////////////////////////////
			if (Boolean.parseBoolean(param.getFluoParameter(
				MaarsParameters.SAVE_FLUORESCENT_MOVIES))) {
				mfa.saveCroppedImgs();
			}
			// close roi manager
			// mfa.getSetOfCells().closeRoiManager();
			mas.setParameters(params);
		}
	}
	mmc.setAutoShutter(true);
	mmc.waitForDevice(mmc.getShutterDevice());
	print("end "+System.currentTimeMillis());
	print("it took "+(System.currentTimeMillis()-start));
	print("DONE.");
}else{
	print("Session aborted, click 'OK' to start analyse.");
}
