base_dir = "D:/Data/Tong/MAARS/";
//base_dir = "/home/tong/Documents/code/MAARS/";
//base_dir = "/home/hadim/Documents/phd/dev/MAARS/";
//base_dir = "/Volumes/Macintosh/Documents/MAARS/";

addClassPath(base_dir + "target/MAARS_-1.0.jar");

//dep_base_dir = "/home/tong/.m2/repository/";
//dep_base_dir = "/Users/tongli/.m2/repository/";
//addClassPath(dep_base_dir +"sc/fiji/TrackMate_/2.7.2/TrackMate_-2.7.2.jar");
//addClassPath(dep_base_dir +"net/imglib2/imglib2/2.2.0/imglib2-2.2.0.jar");
//addClassPath(dep_base_dir +"net/imglib2/imglib2-algorithm/0.2.0/imglib2-algorithm-0.2.0.jar");
//addClassPath(dep_base_dir +"net/imagej/imagej-common/0.12.2/imagej-common-0.12.2.jar");
//addClassPath(dep_base_dir +"net/imglib2/imglib2-ij/2.0.0-beta-29/imglib2-ij-2.0.0-beta-29.jar");
//addClassPath(dep_base_dir +"net/imglib2/imglib2-algorithm-fft/0.1.1/imglib2-algorithm-fft-0.1.1.jar");
//addClassPath(dep_base_dir +"net/imglib2/imglib2-algorithm-gpl/0.1.2/imglib2-algorithm-gpl-0.1.2.jar");
//addClassPath(dep_base_dir +"net/sf/opencsv/opencsv/2.0/opencsv-2.0.jar");
//addClassPath(dep_base_dir +"org/scijava/scijava-common/2.38.2/scijava-common-2.38.2.jar");
//addClassPath(dep_base_dir +"net/sf/jgrapht/jgrapht/0.8.3/jgrapht-0.8.3.jar");
//addClassPath(dep_base_dir +"edu/mines/mines-jtk/20100113/mines-jtk-20100113.jar");
//addClassPath(dep_base_dir +"gov/nist/math/jama/1.0.3/jama-1.0.3.jar");

import au.com.bytecode.opencsv.CSVWriter;
import java.util.List;
import fiji.plugin.maars.maarslib.*;
import fiji.plugin.maars.maarslib.MaarsMainDialog;
import fiji.plugin.maars.maarslib.AllMaarsParameters;
import fiji.plugin.maars.maarslib.ExplorationXYPositions;
import mmcorej.*;
import org.micromanager.api.*;
import ij.*;
import java.io.IOException;
import com.google.gson.JsonElement;
import com.google.gson.JsonObject;
import java.util.HashMap;

double calibration = mm.core().getPixelSizeUm();
mmc.setAutoShutter(false);
mmc.waitForDevice(mmc.getShutterDevice());

print("Create main window");
MaarsMainDialog md = null;

try {
	md = new MaarsMainDialog(mm, mmc, base_dir + "maars_config.txt");
} catch (IOException e) {
	print("Error");
}

print("Show main window");
md.show();

while(md.isVisible()) {
	Thread.sleep(1000);
}

if(md.isOkClicked()) {
	start = System.currentTimeMillis();
	print("start "+start);
	AllMaarsParameters param = null;
	autofocus = mm.getAutofocus();
	param = md.getParameters();
	mmc.setOriginXY(mmc.getXYStageDevice());
	int nbXField = param
						.getParametersAsJsonObject()
						.get(AllMaarsParameters.EXPLORATION_PARAMETERS)
						.getAsJsonObject()
						.get(AllMaarsParameters.X_FIELD_NUMBER)
						.getAsInt();
	int nbYField = param
						.getParametersAsJsonObject()
						.get(AllMaarsParameters.EXPLORATION_PARAMETERS)
						.getAsJsonObject()
						.get(AllMaarsParameters.Y_FIELD_NUMBER)
						.getAsInt();
	print("nb x field "+nbXField+" nb y field "+nbYField);
	String[] outputHeader = new String[]{
		"Cell",
		"Second",
		"Feature",
		"NbOfSpotDetected",
		"CellCenterX",
		"CellCenterY",
		"CellAbsoMajAng",
		"CellMajLength",
		"CellMinLength",
		"SpAbsoAng",
		"SpAngToMaj",
		"SpLength",
		"spb1X",
		"spb1Y",
		"spb1Z",
		"spb2X",
		"spb2Y",
		"spb2Z",
		"SpCenterX",
		"SpCenterY",
		"SpCenterZ",
		"CellCenterToSpCenterLen",
		"CellCenterToSpCenterAng",
		"fieldX",
		"fieldY"
	};
	if (nbXField * nbYField != 0){
		ExplorationXYPositions explo = new ExplorationXYPositions(nbXField,
														nbYField,
														(double) mmc.getImageWidth()*calibration,
														(double) mmc.getImageHeight()*calibration);
		for (int i = 0; i < explo.length(); i++) {
			print("x : "+explo.getX(i)+" y : "+explo.getY(i));
			double xPos = explo.getX(i);
			double yPos = explo.getY(i);
			
			mm.core().setXYPosition(xPos,yPos);
			
			MaarsAcquisitionForSegmentation mas = new MaarsAcquisitionForSegmentation(md,
					xPos,
					yPos);
	
			mmc.waitForDevice(mmc.getXYStageDevice());
	
			autofocus.fullFocus();
	
			HashMap params = mas.getParametersFromConf(param);
			mas.setParameters(params);
			//--------------------------BF acquisition-----------------------------//
			mas.acquire(true);
			//--------------------------segmentation-----------------------------//
			MaarsSegmentation ms = new MaarsSegmentation(param,
				xPos,
				yPos);
			ms.segmentation();
			ms.writeUsedConfig();
			if(ms.roiDetected()){
			//----------------if got ROI, start fluo-acquisition --------//
				MaarsFluoAnalysis mfa = new MaarsFluoAnalysis(param, ms.ms.getSegPombeParam(), xPos, yPos);
//				MaarsAcquisitionMitosis mmad = new MaarsAcquisitionMitosis(md, mfa, xPos, yPos);
				MaarsAcquisitionForFluoAnalysis mafa = new MaarsAcquisitionForFluoAnalysis(md,
																xPos,
																yPos,
																mfa.getSetOfCells());
				List cellsInAllFields = new ArrayList();	
//////////////////////////multiple snapshot per field//////////////////////////////
				if(param
					.getParametersAsJsonObject()
					.get(AllMaarsParameters.FLUO_ANALYSIS_PARAMETERS)
					.getAsJsonObject()
					.get(AllMaarsParameters.DYNAMIC)
					.getAsBoolean()) {
					double timeInterval = param.getParametersAsJsonObject()
							.get(AllMaarsParameters.FLUO_ANALYSIS_PARAMETERS)
							.getAsJsonObject().get(AllMaarsParameters.TIME_INTERVAL)
							.getAsDouble();
					double startTime = System.currentTimeMillis();
					int frame = 0;
					double timeLimit = param.getParametersAsJsonObject()
							.get(AllMaarsParameters.FLUO_ANALYSIS_PARAMETERS)
							.getAsJsonObject().get(AllMaarsParameters.TIME_LIMIT)
							.getAsDouble() * 60 * 1000;
					spindleWriter = new FileWriter(AllMaarsParameters.convertPath(param
													.getParametersAsJsonObject()
													.get(AllMaarsParameters.GENERAL_ACQUISITION_PARAMETERS)
													.getAsJsonObject().get(AllMaarsParameters.SAVING_PATH)
													.getAsString()
													+ "/movie_X"
													+ Math.round(xPos)
													+ "_Y"
													+ Math.round(yPos) + "_FLUO/spindleAnalysis.csv"));
					writer = new CSVWriter(spindleWriter,'\t',CSVWriter.NO_QUOTE_CHARACTER);
					writer.writeNext(outputHeader);
					while (System.currentTimeMillis() - startTime <= timeLimit)
						{
							double beginAcq = System.currentTimeMillis();

							String channels = param.getParametersAsJsonObject()
								.get(AllMaarsParameters.FLUO_ANALYSIS_PARAMETERS)
								.getAsJsonObject().get(AllMaarsParameters.FLUO_CHANNELS)
								.getAsString();
							String[] arrayChannels = channels.split(",", -1);
							for (String channel:arrayChannels) {
								ImagePlus fluoImage = mafa.acquire(true, frame, channel);
								mfa.setFluoImage(fluoImage);
								mfa.zProject();
								mfa.cropAllCells();
								cellsInAllFields.addAll(mfa.analyzeEntireFieldReturnListSp(frame,channel));
							}
							mfa.getSetOfCells().closeRoiManager();
							frame++;
							double acqTook = System.currentTimeMillis() - beginAcq;
							Thread.sleep((long) (timeInterval - acqTook));	
							acqNameFluo = null;
							fluoImage = null;	
						}
/////////////////////////write spindle coordinates///////////////////////////////////
					writer.writeAll(cellsInAllFields);
					spindleWriter.close();
					writer.close();
////////////////////////////one snapshot per field/////////////////////////////////																			
				}else {
					int frame = 0;
					String channels = param.getParametersAsJsonObject()
							.get(AllMaarsParameters.FLUO_ANALYSIS_PARAMETERS)
							.getAsJsonObject().get(AllMaarsParameters.FLUO_CHANNELS)
							.getAsString();
					String[] arrayChannels = channels.split(",", -1);
					for (String channel:arrayChannels) {
						ImagePlus fluoImage = mafa.acquire(true, frame, channel);
						mfa.setFluoImage(fluoImage);
						mfa.zProject();
						mfa.cropAllCells();
						cellsInAllFields.addAll(mfa.analyzeEntireFieldReturnListSp(frame,channel));
					}
					mfa.getSetOfCells().closeRoiManager();
					acqNameFluo = null;
					fluoImage = null;
				}
///////////////////////////save cropped images//////////////////////////////////////
				if (param.getParametersAsJsonObject()
					.get(AllMaarsParameters.FLUO_ANALYSIS_PARAMETERS)
					.getAsJsonObject()
					.get(AllMaarsParameters.SAVE_FLUORESCENT_MOVIES)
					.getAsBoolean()) {
					mfa.saveCroppedImgs();
				}
				// close roi manager
				// mfa.getSetOfCells().closeRoiManager();
				mas.setParameters(params);
			}
		}
		mmc.setAutoShutter(true);
		mmc.waitForDevice(mmc.getShutterDevice());
		print("end "+System.currentTimeMillis());
		print("it took "+(System.currentTimeMillis()-start));
		print("DONE.");
	}else{
		print("Session aborted, 0 field to analyse");
	}
	}else{
		print("Session aborted, click 'OK' to start analyse.");
}
