import ij.IJ;
import ij.ImagePlus;
import ij.plugin.frame.RoiManager;
import ij.gui.Roi;
import ij.plugin.filter.Analyzer;
import ij.measure.ResultsTable;
import ij.measure.Measurements;
savingPath = "/home/tong/Documents/movie_X0_Y0/MITOSIS/movie_X0_Y0_199_BF/0/";
ImagePlus bfimg = IJ.openImage(savingPath + "Maars_BinaryImage.tif");

RoiManager roiManager = new RoiManager();
roiManager.runCommand("Open", savingPath + "Maars_ROI.zip");
Roi[] roiArray = roiManager.getRoisAsArray();
Roi cellRoi =roiArray[0];
Analyzer bfAnalyzer = new Analyzer(bfimg, Measurements.AREA
				+ Measurements.STD_DEV + Measurements.MIN_MAX
				+ Measurements.SHAPE_DESCRIPTORS + Measurements.CENTROID
				+ Measurements.PERIMETER + Measurements.ELLIPSE, rt);

print("- measure");
bfAnalyzer.measure();
print(rt.getValue("Area", 0));
print(rt.getValue("Min", 0));
print(rt.getValue("Max", 0));
roiManager.close();